PsychoPy2experiment version="2025.1.1"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['UPN-ID'], expName, expInfo['date'])
  Experiment info = {'session_admin': 'xxx', 'UPN-ID': '999'}
  Full-screen window = True
  Monitor = HD-Lab
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = 2025.1.1
  Window size (pixels) = [1920, 1200]
  expName = 0.5Hz_30bcpm_FPB_circle
  keyboardBackend = ioHub
  logging level = error
  measureFrameRate = False
  runMode = 1
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Routines
  Routine _settings
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    CodeComponent set_things
      Code Type = Py
      Begin Experiment:
        ## ########################################################################## ##
        ## ##                                                                      ## ##
        ## ##              FAST PACED BREATHING (FPB)/HYPERVENTILATION             ## ##
        ## ##                                                                      ## ##
        ## #########################|12/2025|bw (bernhard.weber@uni-graz.at)|CC-BY|## ##
        print(data.getDateStr(format="%H:%M:%S.%m"))   #local: set/mark start of current run

        ##  enable parallel port for markers  ##
        from psychopy import parallel
        Marker = parallel.ParallelPort(address=0x3FF8)

        ##  Options for DEBUG/RESARCH-mode  ##
        DEBUG = 0   #0=research-mode; 1=debug-mode
        if DEBUG:
            BREATHING_DUR = 10          #debug: breathing duration in [s]
        else:
            BREATHING_DUR = 120         #breathing duration in [s]

        ## breathing frequency
        BCPM = 30                       #30 breathing-cycles per minute = 0.500Hz
        #BCPM = 36                      #36 breathing-cycles per minute = 0.600Hz > STANDARD FAST PACED BREATHING


        ##  Options for ONSCREEN-KEYBOARD (touchscreen WACOM ONE)  ##
        ONSCREENKEYBOARD = 0   #0=NO onscreen keyboard; 1=ONSCREEN-KEYBOARD with touchscreen WACOM ONE
        if ONSCREENKEYBOARD:
            header_pos_y = .40
            main_pos_y   = .225
            main_pos_y_px= 270
            btn_pos_y    = .05
            hint_pos_y   = 0
        else:
            header_pos_y = .40
            main_pos_y   = 0
            main_pos_y_px= 0
            btn_pos_y    = -.25
            hint_pos_y   = -.45


        ##  initialize some vars  ##
        win.mouseVisible = True
      Begin Routine:
        ##  marker: FPB (0.5Hz, 30bcpm) task START  ##
        Marker.setData(131); core.wait(0.1); Marker.setData(0)
      End Experiment:
        ##  marker: FPB (0.5Hz, 30bcpm) task STOP  ##
        Marker.setData(133); core.wait(0.1); Marker.setData(0)
  Routine thx
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    TextComponent thx_txt
      durationEstim = 3
      letterHeight = 0.035
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Vielen Dank,

        dieser Teil der Untersuchung ist zu Ende.
    KeyboardComponent thx_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent thx_hint
      color = $[-0.25,-0.25,-0.25]
      letterHeight = 0.025
      pos = (.25, btn_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Beenden mit Enter
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  Routine HV
    RoutineSettingsComponent HV
      disabled = True
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    CodeComponent HVcode
      Code Type = Py
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      Begin Experiment:
        ##  respiration timer  ##
        respClock = core.Clock()
      Begin Routine:
        win.mouseVisible = False

        c_resp_txt.alignText = 'center'

        ##  > 'Einatmen'
        resp_txt = 'Einatmen'
        b_txt_size = 0.035

        circle_color = inhale_color         #(re)set color of breathing bar

        respTime = 0
        respClock.reset()

        exhale = False

        HVonce = False
        #print("current HV-loop:", (HV_loop.thisN, HV_loops, HV_loop.thisTrialN))

        tonce = False
      Each Frame:
        try:
            ##  get current (respiration-animation) time  ##
            respTime = respClock.getTime()

            # # # respiration text: basic-size = 0.035  ##
            # # #    '/50' > flatten the (cos-)curve; +1/50 > offset to start x=0|y=0
            # # # b_txt_size = 0.035 -cos(pi*respTime/(dur_inhaleIHOH+durHold))/50 +1/50 #

            ##  respiration circle: res(idual)-size = 200px  ##
            ##    '+|- '150' > variability of circle size
            circ_dia = res_size -cosXYshift*cos(pi*respTime/(dur_inhaleIHOH+durHold)) + cosXYshift

            ##  > hold
            #if respTime >= dur_inhaleIHOH: resp_txt = ' '  #no 'hold' for HV

            ##  > 'Ausatmen'
            if respTime >= (dur_inhaleIHOH+durHold):
            #if not exhale and respTime >= (dur_inhaleIHOH+durHold) and HV_loop.thisN+1 < HV_loops:
                exhale = True
                #print("EXHALE - current info HV_loop.thisN, HV_loops:", (HV_loop.thisN, HV_loops))
                #   #another (slower/faster) x-shifted (=move left/right) "cos()"-function
                circ_dia = res_size -cosXYshift*cos(pi*respTime/(dur_exhaleIHOH+durHold) + shift_x) + cosXYshift

                circle_color = exhale_color
                resp_txt = 'Ausatmen'

        except Exception as e:
            # Log or handle exceptions here
            print(f"An error occurred: {e}")
      End Routine:
        win.mouseVisible = True
    PolygonComponent c_resp_frame
      contrast = 0.5
      fillColor = 0.8824, 0.9451, 1.0000
      lineColor = black
      opacity = 0.5
      pos = (0, main_pos_y_px)
      shape = circle
      size = (circle_size+frameExtension, circle_size+frameExtension)
      startVal [time (s)] = 0.0
      stopVal [condition] = respTime >= (dur_inhaleIHOH + durHold + dur_exhaleIHOH + durHold)
      units = pix
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    PolygonComponent resp_circle
      fillColor [set every frame] = $circle_color
      lineColor [set every frame] = $circle_color
      pos = (0, main_pos_y_px)
      shape = circle
      size [set every frame] = (circ_dia, circ_dia)
      startVal [time (s)] = 0.0
      stopVal [condition] = respTime >= (dur_inhaleIHOH + durHold + dur_exhaleIHOH + durHold)
      units = pix
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    TextComponent c_resp_txt
      color = black
      contrast = .75
      letterHeight [set every frame] = b_txt_size*1000
      opacity = .75
      pos = (0, main_pos_y_px)
      startVal [time (s)] = 0.0
      stopVal [condition] = respTime >= (dur_inhaleIHOH + durHold + dur_exhaleIHOH + durHold)
      text [set every frame] = $resp_txt
      units = pix
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  Routine HV_new
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    CodeComponent HVnew_code
      Code Type = Py
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      Begin Experiment:
        ##  respiration timer  ##
        #respClock = core.Clock()

        # Timer für diese Routine
        breathing_clock = core.Clock()

        # Dauer der Atemball-Routine in Sekunden
        breathing_duration = 10.0  # oder wie lange du willst

        # Erstelle die visuellen Komponenten (nutzt das bestehende win-Objekt)
        breathing_circle = visual.Circle(
            win,
            #win=win,
            radius=MAX_RADIUS * MIN_SIZE_PERCENT,
            edges=64,
            lineColor=[1, 1, 1],
            lineWidth=3,
            pos=[0, 0]  # Position anpassen falls nötig
        )

        breathing_text = visual.TextStim(
            win,
            #win=win,
            text='',
            pos=[0, -350],  # Position unter dem Ball
            #height=40, #px
            height=.35, # unit: norm
            color=[1, 1, 1]
        )
      Begin Routine:
        # ===== BEGIN ROUTINE Tab =====
        # Dieser Code kommt in den "Begin Routine" Tab

        #from psychopy import visual, core

        print("=== ATEMBALL ROUTINE STARTET ===")
        """
        # Erstelle die visuellen Komponenten (nutzt das bestehende win-Objekt)
        breathing_circle = visual.Circle(
            win,
            #win=win,
            radius=MAX_RADIUS * MIN_SIZE_PERCENT,
            edges=64,
            lineColor=[1, 1, 1],
            lineWidth=3,
            pos=[0, 0]  # Position anpassen falls nötig
        )

        breathing_text = visual.TextStim(
            win,
            #win=win,
            text='',
            pos=[0, -350],  # Position unter dem Ball
            #height=40, #px
            height=.35, # unit: norm
            color=[1, 1, 1]
        )
        """
        #print("Komponenten erstellt, Timer gestartet")

        b_start = breathing_clock.getTime()
        print(f'{b_start=}')
        print("Timer gestartet")


        """
        ## ===== AUSFÜHRUNG =====
        #if __name__ == '__main__':
        #    # Starte für 60 Sekunden (oder endlos mit duration=0)
        #    run_breathing_ball(duration=30)
        print("go 4 it")
        run_breathing_ball(duration=30)
        """








        """

        win.mouseVisible = False

        c_resp_txt.alignText = 'center'

        ##  > 'Einatmen'
        resp_txt = 'Einatmen'
        b_txt_size = 0.035

        circle_color = inhale_color         #(re)set color of breathing bar

        respTime = 0
        respClock.reset()

        exhale = False

        HVonce = False
        #print("current HV-loop:", (HV_loop.thisN, HV_loops, HV_loop.thisTrialN))

        tonce = False
        """
      Each Frame:
        # Berechne verstrichene Zeit
        elapsed = breathing_clock.getTime()

        # Hole aktuellen Zustand
        radius, color, phase = get_breathing_state(elapsed)

        # Aktualisiere Kreis
        breathing_circle.radius = radius
        breathing_circle.fillColor = color

        # Aktualisiere Text (optional)
        breathing_text.text = phase

        # Zeichne die Komponenten
        breathing_circle.draw()
        breathing_text.draw()

        core.wait(.5)

        # Debug-Output (nur ersten Frame und dann alle 60 Frames)
        if frameN == 0 or frameN % 60 == 0:
            print(f"Frame {frameN}: Zeit={elapsed:.2f}s, Phase={phase}, Radius={radius:.3f}")


        # Beende Routine nach festgelegter Zeit
        #if elapsed >= b_start + breathing_duration:
        #    continueRoutine = False


        """
        try:
            ##  get current (respiration-animation) time  ##
            respTime = respClock.getTime()

            # # # respiration text: basic-size = 0.035  ##
            # # #    '/50' > flatten the (cos-)curve; +1/50 > offset to start x=0|y=0
            # # # b_txt_size = 0.035 -cos(pi*respTime/(dur_inhaleIHOH+durHold))/50 +1/50 #

            ##  respiration circle: res(idual)-size = 200px  ##
            ##    '+|- '150' > variability of circle size
            circ_dia = res_size -cosXYshift*cos(pi*respTime/(dur_inhaleIHOH+durHold)) + cosXYshift

            ##  > hold
            #if respTime >= dur_inhaleIHOH: resp_txt = ' '  #no 'hold' for HV

            ##  > 'Ausatmen'
            if respTime >= (dur_inhaleIHOH+durHold):
            #if not exhale and respTime >= (dur_inhaleIHOH+durHold) and HV_loop.thisN+1 < HV_loops:
                exhale = True
                #print("EXHALE - current info HV_loop.thisN, HV_loops:", (HV_loop.thisN, HV_loops))
                #   #another (slower/faster) x-shifted (=move left/right) "cos()"-function
                circ_dia = res_size -cosXYshift*cos(pi*respTime/(dur_exhaleIHOH+durHold) + shift_x) + cosXYshift

                circle_color = exhale_color
                resp_txt = 'Ausatmen'

        except Exception as e:
            # Log or handle exceptions here
            print(f"An error occurred: {e}")

        """
      End Routine:
        win.mouseVisible = True

        # ===== END ROUTINE Tab (Optional) =====
        # Dieser Code kommt in den "End Routine" Tab - nur falls du aufräumen möchtest

        # Optional: Variablen löschen um Speicher freizugeben
        # del breathing_circle
        # del breathing_text
        # del breathing_clock

        print(f"=== ATEMBALL ROUTINE BEENDET nach {breathing_clock.getTime():.1f}s ===")
  Routine FPB
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    CodeComponent FPB_code
      Code Type = Py
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      Begin Experiment:
        ###   ===== CONFIGURATION =====   ###
        # BCPM ... breathing-cycles per minute (> for Hyperventilation/fast breathing)
        # -----------------------------------
        #BCPM = 6                   # 6 breathing-cycles per minute = 0.100Hz > STANDARD SLOW PACED BREATHING
        #BCPM = 30                  #30 breathing-cycles per minute = 0.500Hz
        #BCPM = 36                  #36 breathing-cycles per minute = 0.600Hz > STANDARD FAST PACED BREATHING
        #BCPM = 50                  #50 breathing-cycles per minute = 0.833Hz - fast paced HV (Angerbauer 2025)
        #BCPM = 60                  #60 breathing-cycles per minute = 1.000Hz
        #BCPM = 65                  #65 breathing-cycles per minute = 1.083Hz
        #BCPM = 70                  #70 breathing-cycles per minute = 1.166Hz
        #BCPM = 75                  #70 breathing-cycles per minute = 1.250Hz


        ##  duration of (fast paced) breathing task  ##
        # >>(global) '_settings'- routine >> BREATHING_DUR = 10.0        #breathing duration in [s]

        #CYCLE_TIME = 10.0          # Gesamtdauer eines Atemzyklus in Sekunden
        CYCLE_TIME = 60/BCPM        # 60s/breathing-cycles_per_minute

        #INHALE_RATIO = 0.60        # ratio of inhale (60% = 6s for a 10s cycle)
        INHALE_RATIO = 0.50         # 50% inhale - 50% exhale
        PAUSE_TIME = 0.00           # pause during in- and exhale
        MIN_SIZE_PERCENT = 0.275    # 'residual volume' (xx% of maximum)
        #MAX_RADIUS = 300           # max. radius [px]
        #MAX_RADIUS = 0.3           # max. radius [norm] units; (0.3 = 30% der Fensterhöhe)
        MAX_DIAMETER = 0.6          # max. diameter [norm] units (0.7 = 70% of screen/windowheight)

        ##  define some colors (RGB from -1 to 1)
        #COLOR_INHALE = [0.0, 0.5, 1.0]             #blue
        COLOR_INHALE = [1.0000, 0.4275, 0.5137]     #breathing circle color (inhale JMT neu)
        COL_INH_LINE = [1.0000, 0.2000, 0.6000]     #breathing cirlce line color
        #COLOR_EXHALE = [1.0000, 0.3000, 0.5000]    #pink
        COLOR_EXHALE = [0.0588, 0.6157, 0.9608]     #breathing bar color (exhale JMT_neu)
        COL_EXH_LINE = [-0.500, 0.5000, 1.0000]     #breathing cirlce line color
        COLOR_PAUSE = [0.8, 0.8, 1.0]               #lightblue


        ##  ===== CALCULATION OF PHASE TIMES =====  ##
        total_pause = PAUSE_TIME * 2
        active_time = CYCLE_TIME - total_pause
        inhale_time = active_time * INHALE_RATIO
        exhale_time = active_time - inhale_time

        print(f"Atemzyklus Konfiguration:")
        print(f"  Anzahl Atemzüge/Minute: {BCPM}")
        print(f"  Atemfrequenz: {1/CYCLE_TIME:.4f}Hz")
        print(f"  Dauer Atemzug: {CYCLE_TIME:.4f}s")
        print(f"  Einatmen/inhale: {inhale_time:.2f}s")
        print(f"  Ausatmen/exhale: {exhale_time:.2f}s")
        print(f" (Pausen/hold á: {PAUSE_TIME}s)")
        print(f"  Min. Größe: {MIN_SIZE_PERCENT*100:.2f}%")


        ##  create the visual components  ##
        # breathing-circle
        breathing_circle = visual.ShapeStim(
             win, name='breathing_circle',
             #size=(2*MAX_RADIUS * MIN_SIZE_PERCENT, 2*MAX_RADIUS * MIN_SIZE_PERCENT), vertices='circle',
             size=(MAX_DIAMETER * MIN_SIZE_PERCENT, MAX_DIAMETER * MIN_SIZE_PERCENT), vertices='circle',
             ori=0.0, pos=(0, 0), draggable=False, anchor='center',
             lineWidth=3.0, colorSpace='rgb', lineColor=[0, 0, 0], fillColor='white',
             opacity=None, depth=0.0, interpolate=True
         )

        # breathing-info/status-text
        breathing_text = visual.TextStim(
            win,
            text='',
            #pos=[0, -350],  #px - position unter dem Ball
            pos=[0, 0],  #unit: norm/px
            #height=40, #px
            height=.035, # unit: norm
            color=[1, 1, 1]
        )


        ##  ===== HELP-FUNCTIONS =====  ##
        #smoothing the circle animation
        def ease_in_out_sine(x):
            """Smoothing function for natural breathing movement/Glättungsfunktion für natürliche Atembewegung"""
            return -(np.cos(np.pi * x) - 1) / 2

        #check current breathing-phase, call the calculation
        def get_breathing_state(elapsed_time):
            """
            Calculates radius/diameter and color based on elapsed time
            Berechnet Radius/Durchmesser und Farbe basierend auf der verstrichenen Zeit

            Returns:
                #tuple: (radius, color, phase_name)
                tuple: (radius, color, line_color, phase_name)
            """
            et = elapsed_time % CYCLE_TIME
            #min_radius = MAX_RADIUS * MIN_SIZE_PERCENT
            min_diameter = MAX_DIAMETER * MIN_SIZE_PERCENT

            ## Phase 1: INHALE
            if et < inhale_time:
                phase = "Einatmen"
                progress = et / inhale_time
                smooth_progress = ease_in_out_sine(progress)
                #radius = min_radius + (MAX_RADIUS - min_radius) * smooth_progress
                diameter = min_diameter + (MAX_DIAMETER - min_diameter) * smooth_progress
                color = COLOR_INHALE
                line_color = COL_INH_LINE

            ## Phase 2: PAUSE after inhale
            elif et < inhale_time + PAUSE_TIME:
                #phase = "Halten"
                #phase = ""
                phase = "Einatmen"      #FPB, no 'hold'
                #radius = MAX_RADIUS
                diameter = MAX_DIAMETER
                #color = COLOR_PAUSE
                color = COLOR_INHALE
                line_color = COL_INH_LINE

            ## Phase 3: EXHALE
            elif et < inhale_time + PAUSE_TIME + exhale_time:
                phase = "Ausatmen"
                progress = (et - inhale_time - PAUSE_TIME) / exhale_time
                smooth_progress = ease_in_out_sine(progress)
                #radius = MAX_RADIUS - (MAX_RADIUS - min_radius) * smooth_progress
                diameter = MAX_DIAMETER - (MAX_DIAMETER - min_diameter) * smooth_progress
                color = COLOR_EXHALE
                line_color = COL_EXH_LINE

            ## Phase 4: PAUSE after exhale
            else:
                #phase = "Halten"
                #phase = ""
                phase = "Ausatmen"      #FPB, no 'hold'
                #radius = min_radius
                diameter = min_diameter
                #color = COLOR_PAUSE
                color = COLOR_EXHALE
                line_color = COL_EXH_LINE

            #return radius, color, phase
            return diameter, color, line_color, phase
      Begin Routine:
        ##  Timer für respiration (circle/cylce)  ##
        breathing_clock = core.Clock()
      Each Frame:
        ##  updating breathing-circle parameter  ##
        while True:
            elapsed = breathing_clock.getTime()     # Berechne verstrichene Zeit

            ## Beende Routine nach festgelegter Zeit
            if elapsed >= BREATHING_DUR:
                break;

            ## ESC >> Exit
            if event.getKeys(['escape']):
                break

            ## Hole aktuellen Zustand
            #radius, color, phase = get_breathing_state(elapsed)
            diameter, color, line_color, phase = get_breathing_state(elapsed)

            ## Aktualisiere Kreis | Text (optional)
            #breathing_circle.radius     = radius
            breathing_circle.size       = diameter
            breathing_circle.fillColor  = color
            breathing_circle.lineColor  = line_color
            breathing_text.text         = phase

            ## Zeichne die Komponenten
            breathing_circle.draw()
            breathing_text.draw()
            win.flip()
      End Routine:
        ##  marker: FPB (0.5Hz, 30bcpm) 2min STOP  ##
        Marker.setData(33); core.wait(0.1); Marker.setData(0)
  Routine FPB_ins
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    CodeComponent FPB_ins_code
      Code Type = Py
      Begin Routine:
        FPB_ins_txt.alignText = 'center'
        #FPB_bcpm_ins_txt.alignText = 'center'
    TextComponent FPB_ins_header
      color = black
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = (schnelle) Pendelatmung
      wrapWidth = 1
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    TextComponent FPB_ins_txt
      color = black
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Es folgt die schnelle Atembedingung.
        Atme nun bitte in der mit dem Atemkreis vorgegebenen Frequenz.

        Wenn du bereit bist > "Weiter"
    TextComponent FPB_bcpm_ins_txt
      color = black
      disabled = True
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      text = $"Es folgt die schnelle Atembedingung mit %s Atemzügen/Minute.\nAtme nun bitte in der mit dem Atemkreis vorgegebenen Frequenz.\n\n Wenn du bereit bist > 'Weiter'" % (BCPM)
      wrapWidth = 1.25
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    KeyboardComponent FPB_ins_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent FPB_ins_btn
      fillColor = lightgrey
      lineColor = black
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent FPB_ins_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent FPB_ins_mse
      clickable = FPB_ins_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine go4FPB
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    CodeComponent go4FPB_code
      Code Type = Py
      End Routine:
        ##  marker: FPB (0.5Hz, 30bcpm) 2min START  ##
        Marker.setData(31); core.wait(0.1); Marker.setData(0)
    TextComponent go4it_txt
      color = black
      letterHeight = 0.035
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = ...es beginnen die schnellen Atemzüge...
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Flow
  Routine _settings
  LoopInitiator FPB_ins_byp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine FPB_ins
  LoopTerminator FPB_ins_byp
  LoopInitiator FPB_byp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine go4FPB
    Routine FPB
  LoopTerminator FPB_byp
  Routine thx
